PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will see a series of math statements.
        Your task is to decide whether each statement is TRUE or FALSE.

        Press T if the statement is TRUE.
        Press F if the statement is FALSE.

        Please respond as accurately as possible.

        Press SPACE to begin.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent problem_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $problem
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 't','f'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine fixation
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    PolygonComponent fix
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'problem_id': 1, 'problem': '5 + 7 = 12', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 2, 'problem': '8 − 3 = 5', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 3, 'problem': '9 + 1= 10', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 4, 'problem': '6 x 2 = 12', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 5, 'problem': '4 + 4 = 8', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 6, 'problem': '10 -2 = 8', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 7, 'problem': '3 + 6 = 9', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 8, 'problem': '7 + 5 = 12', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 9, 'problem': '12 - 4 = 8', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 10, 'problem': '2 x 5 =10', 'correct': 't', 'difficulty': 'easy'},
      {'problem_id': 11, 'problem': '8 - 3 = 4', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 12, 'problem': '7 + 3 = 15', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 13, 'problem': '6 x 2 = 14', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 14, 'problem': '9 -1 = 5', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 15, 'problem': '4 + 9 = 10', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 16, 'problem': '10 -7 = 1', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 17, 'problem': '3 + 3 = 10', 'correct': 'f', 'difficulty': 'easy'},
      {'problem_id': 18, 'problem': '12 - 6 =10', 'correct': 'f', 'difficulty': 'easy'}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
    Routine fixation
    Routine trial
  LoopTerminator trials
